(AutomaticParameterEstimation "true")
(CheckNumberOfSamples "true")
(DefaultPixelValue 0.000000)
(FinalBSplineInterpolationOrder 3.000000)
(FixedImagePyramid "FixedSmoothingImagePyramid")
(ImageSampler "RandomCoordinate")
(Interpolator "LinearInterpolator")
(MaximumNumberOfIterations 200)
(MaximumNumberOfSamplingAttempts 8.000000)
(Metric "AdvancedNormalizedCorrelation")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(NewSamplesEveryIteration "true")
(NumberOfResolutions 6)
(ImagePyramidSchedule 32 32 16  16 16 8  8 8 4  4 4 2  2 2 1  1 1 1)
//(NumberOfSamplesForExactGradient 2048.000000)
(NumberOfSpatialSamples 2048)
//(AutomaticTransformInitialization "true")
//(AutomaticTransformInitializationMethod "CenterOfGravity")
(Optimizer "AdaptiveStochasticGradientDescent")
//(SP_a 400.0 40.0 40.0)
(Registration "MultiResolutionRegistration")
(RequiredRatioOfValidSamples 0.1)
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(ResultImageFormat "nii")
(Transform "TranslationTransform")
(WriteIterationInfo "false")
(WriteResultImage "false")
(MaximumStepLength 4.0 2.0 1.0 1.0)
