(AutomaticParameterEstimation "true")
(AutomaticScalesEstimation "true")
(CheckNumberOfSamples "true")
(DefaultPixelValue 0.000000)
(FinalBSplineInterpolationOrder 3.000000)
(FixedImagePyramid "FixedSmoothingImagePyramid")
(ImageSampler "RandomCoordinate")
(Interpolator "LinearInterpolator")
//(MaximumNumberOfIterations 1000 1000 1000 1000)
//(MaximumNumberOfIterations 1000 1000)
(MaximumNumberOfIterations 1000)
(MaximumNumberOfSamplingAttempts 8.000000)
(Metric "AdvancedNormalizedCorrelation")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(NewSamplesEveryIteration "true")
//(NumberOfResolutions 2)
(NumberOfResolutions 2)
(ImagePyramidSchedule 4 4 1 1 1 1)
//(ImagePyramidSchedule 2 2 1  1 1 1)
//(ImagePyramidSchedule 64 64 2  32 32 1  8 8 1  1 1 1)
//(NumberOfSamplesForExactGradient 2048.000000)
//(NumberOfSpatialSamples 16384)
(NumberOfSpatialSamples 2000 4000)
//(NumberOfSpatialSamples 16384 16384 16384 16384)
(AutomaticTransformInitialization "true")
//(AutomaticTransformInitializationMethod "CenterOfGravity")
(AutomaticTransformInitializationMethod "GeometricalCenter")
(Optimizer "AdaptiveStochasticGradientDescent")
//(SP_a 400.0 40.0 40.0)
(Registration "MultiResolutionRegistration")
(RequiredRatioOfValidSamples 0.1)
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(ResultImageFormat "mhd")
(Transform "TranslationTransform")
//(Transform "EulerTransform")
(WriteIterationInfo "false")
(WriteResultImage "true")
(ResultImagePixelType "float")
(MaximumStepLength 4.0)
//(MaximumStepLength 4.0 1.0)
//(MaximumStepLength 16.0 16.0 4.0 1.0)